PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = PS5
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Routines
  Routine Instructions
    TextComponent Instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will hear a sentence and will be asked to respond to the last word in the sentence.


        PRESS ANY KEY TO CONTINUE
    KeyboardComponent key_resp_instruc
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    SoundComponent sound_1
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    RatingScaleComponent rating
      categoryChoices = 'correct' , 'incorrect'
      forceEndRoutine = True
      high = 1
      labels = 'incorrect' , 'correct'
      low = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = audiostim.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('audio', 'audiofiles/1.wav')]),
      OrderedDict([('audio', 'audiofiles/2.wav')]),
      OrderedDict([('audio', 'audiofiles/3.wav')])]
    Routine Trial
  LoopTerminator trials
